PsychoPy2experiment version="2020.1.2"
Settings
  Experiment info = {'session': '001', 'participant': ''}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = use prefs
  Window size (pixels) = [1440, 900]
  color = $[-1,-1,-1]
  expName = PictureNaming
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Routines
  Routine trial
    CodeComponent setITI
      Code Type = Auto->JS
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      Begin Experiment:
        ITI = 0
        print(ITI)


        win.mouseVisible = False
      Begin Routine:
        import random
        ITI = 0.5 + random.random()*0.5
        print(ITI)
    KeyboardComponent key_resp_2
      allowedKeys = 'space', 'e', 'c', 'b', 'd'
      forceEndRoutine = True
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    SoundComponent stimSound
      sound [set every repeat] = $stimFile
      startVal [time (s)] = $ITI
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    TextComponent text1
      letterHeight = 1
      startVal [time (s)] = $ITI
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    CodeComponent LabJack_Trial
      Code Type = Both
      Begin Routine:
        d.setFIOState(1,1)
        d.setFIOState(1,0)
        d.setFIOState(7,1)
        d.setFIOState(7,0)
  Routine Instruction
    CodeComponent code
      Code Type = Both
      Begin Experiment:
        from psychopy import monitors
        from psychopy.hardware.labjacks import u3
        import time

        for mon in monitors.getAllMonitors():
            print(mon, monitors.Monitor(mon).getSizePix())

        d = u3.U3()

        for i in range(11):
            d.setFIOState(1,1)
            d.setFIOState(1,0)
            d.setFIOState(7,1)
            d.setFIOState(7,0)
            time.sleep(0.1)
      Begin JS Experiment:
        var sUsrAg;
        var nIdx;
        function getBrowserId () {
            var browsers = ["MSIE", "Firefox", "Safari", "Chrome", "Opera"];
            sUsrAg = window.navigator.userAgent,
            nIdx = browsers.length - 1;
            for (nIdx; nIdx > -1 && sUsrAg.indexOf(browsers [nIdx]) === -1; nIdx--);

          return browsers[nIdx];
        }

        myBrowser = getBrowserId();
      End JS Routine:
        expInfo['OS'] = window.navigator.platform;
        expInfo['Browser'] = myBrowser;
    TextComponent instruction
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        In this task, we will ask you a question, and the answer is usually a single word. As soon as you think of the word, say it out loud. For example, if we ask, "A boat that travels underwater?" you would say, "submarine." Some questions could have more than one answer. Just say the best answer. Please try to respond as fast as you can without making mistakes.
    KeyboardComponent key_resp
      allowedKeys = 'space', 'e', 'c', 'b', 'd'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Fixation
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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Flow
  Routine Instruction
  Routine Fixation
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = audio.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('stimFile', "'audio/Apron.wav'")]),
      OrderedDict([('stimFile', "'audio/Astronaut.wav'")]),
      OrderedDict([('stimFile', "'audio/Banana.wav'")]),
      OrderedDict([('stimFile', "'audio/Bank.wav'")]),
      OrderedDict([('stimFile', "'audio/Bee.wav'")]),
      OrderedDict([('stimFile', "'audio/Blanket.wav'")]),
      OrderedDict([('stimFile', "'audio/Bow.wav'")]),
      OrderedDict([('stimFile', "'audio/Brain.wav'")]),
      OrderedDict([('stimFile', "'audio/Calculator.wav'")]),
      OrderedDict([('stimFile', "'audio/Camera.wav'")]),
      OrderedDict([('stimFile', "'audio/Cat.wav'")]),
      OrderedDict([('stimFile', "'audio/Cow.wav'")]),
      OrderedDict([('stimFile', "'audio/Drum.wav'")]),
      OrderedDict([('stimFile', "'audio/Duck.wav'")]),
      OrderedDict([('stimFile', "'audio/Flag.wav'")]),
      OrderedDict([('stimFile', "'audio/Grape.wav'")]),
      OrderedDict([('stimFile', "'audio/Guitar.wav'")]),
      OrderedDict([('stimFile', "'audio/Gun.wav'")]),
      OrderedDict([('stimFile', "'audio/Gym.wav'")]),
      OrderedDict([('stimFile', "'audio/Heart.wav'")]),
      OrderedDict([('stimFile', "'audio/Key.wav'")]),
      OrderedDict([('stimFile', "'audio/Lightning.wav'")]),
      OrderedDict([('stimFile', "'audio/Lung.wav'")]),
      OrderedDict([('stimFile', "'audio/Mechanic.wav'")]),
      OrderedDict([('stimFile', "'audio/Moth.wav'")]),
      OrderedDict([('stimFile', "'audio/Piano.wav'")]),
      OrderedDict([('stimFile', "'audio/Pilot.wav'")]),
      OrderedDict([('stimFile', "'audio/Pool.wav'")]),
      OrderedDict([('stimFile', "'audio/Pumpkin.wav'")]),
      OrderedDict([('stimFile', "'audio/Spider.wav'")]),
      OrderedDict([('stimFile', "'audio/Thermometer.wav'")])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
    Routine trial
  LoopTerminator trials
