PsychoPy2experiment version="2020.1.2"
Settings
  Experiment info = {'session': '001', 'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = use prefs
  Window size (pixels) = [1440, 900]
  color = $[-1,-1,-1]
  expName = PictureNaming
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Routines
  Routine trial
    CodeComponent setITI
      Code Type = Both
      Begin Experiment:
        ITI = 0
        print(ITI)


        win.mouseVisible = False
      Begin JS Experiment:
        random = Math.random;
        ITI = 0;

        document.body.style.cursor='none';
        win=psychoJS.window;
        win.mouseVisible = false;

        console.log(window.navigator.platform)
      Begin JS Routine:
        ITI = 0.5 + random()*0.5;
      Begin Routine:
        import random
        ITI = 0.5 + random.random()*0.5
        print(ITI)

        d.setFIOState(1,1)
        d.setFIOState(1,0)
        d.setFIOState(7,1)
        d.setFIOState(7,0)
    KeyboardComponent key_resp_2
      allowedKeys = 'space', 'e', 'c', 'b', 'd'
      forceEndRoutine = True
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    SoundComponent stimSound
      sound [set every repeat] = $stimFile
      startVal [time (s)] = $ITI
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  Routine Instruction
    CodeComponent code
      Code Type = Both
      Begin Experiment:
        from psychopy.hardware.labjacks import u3
        import time

        d = u3.U3()

        for i in range(12):
            d.setFIOState(1,1)
            d.setFIOState(1,0)
            d.setFIOState(7,1)
            d.setFIOState(7,0)
            time.sleep(0.1)
      Begin JS Experiment:
        console.log(window.navigator.platform)
        oper = (window.navigator.platform);

        var sUsrAg;
        var nIdx;
        function getBrowserId () {
            var browsers = ["MSIE", "Firefox", "Safari", "Chrome", "Opera"];
            sUsrAg = window.navigator.userAgent,
            nIdx = browsers.length - 1;
            for (nIdx; nIdx > -1 && sUsrAg.indexOf(browsers [nIdx]) === -1; nIdx--);

          return browsers[nIdx];
        }

        myBrowser = getBrowserId();
        console.log(myBrowser);
      End JS Routine:
        expInfo['OS'] = window.navigator.platform;
        expInfo['Browser'] = myBrowser;
    TextComponent instruction
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        In this task, we will present you with a single word. As soon as you hear the word, please repeat it out loud. For example, if you hear the word "Boat", say "Boat". Please try to respond as fast as you can without making mistakes.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine fixation
    TextComponent text
      letterHeight = 0.08
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
        +
Flow
  Routine Instruction
  Routine fixation
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = images.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('stimFile', 'flac/apostrophe2.flac')]),
      OrderedDict([('stimFile', 'flac/appetizer2.flac')]),
      OrderedDict([('stimFile', 'flac/applicator.flac')]),
      OrderedDict([('stimFile', 'flac/asparagus2.flac')]),
      OrderedDict([('stimFile', 'flac/ballerina.flac')]),
      OrderedDict([('stimFile', 'flac/biographer.flac')]),
      OrderedDict([('stimFile', 'flac/bodybuilder.flac')]),
      OrderedDict([('stimFile', 'flac/cafeteria.flac')]),
      OrderedDict([('stimFile', 'flac/calculator.flac')]),
      OrderedDict([('stimFile', 'flac/carryover.flac')]),
      OrderedDict([('stimFile', 'flac/caterpillar2.flac')]),
      OrderedDict([('stimFile', 'flac/centimeter.flac')]),
      OrderedDict([('stimFile', 'flac/conditioner.flac')]),
      OrderedDict([('stimFile', 'flac/copywriter2.flac')]),
      OrderedDict([('stimFile', 'flac/counterbalance.flac')]),
      OrderedDict([('stimFile', 'flac/creativeness.flac')]),
      OrderedDict([('stimFile', 'flac/deodorant.flac')]),
      OrderedDict([('stimFile', 'flac/dormitory.flac')]),
      OrderedDict([('stimFile', 'flac/educator.flac')]),
      OrderedDict([('stimFile', 'flac/enormity2.flac')]),
      OrderedDict([('stimFile', 'flac/entertainer2.flac')]),
      OrderedDict([('stimFile', 'flac/entertainment2.flac')]),
      OrderedDict([('stimFile', 'flac/escalator2.flac')]),
      OrderedDict([('stimFile', 'flac/exclamation2.flac')]),
      OrderedDict([('stimFile', 'flac/exhalation2.flac')]),
      OrderedDict([('stimFile', 'flac/extinguisher.flac')]),
      OrderedDict([('stimFile', 'flac/festivity.flac')]),
      OrderedDict([('stimFile', 'flac/forgetfulness1.flac')]),
      OrderedDict([('stimFile', 'flac/harmonica2.flac')])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
    Routine trial
  LoopTerminator trials
