PsychoPy2experiment version="2021.1.2"
Settings
  Experiment info = {'session': '001', 'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = use prefs
  Window size (pixels) = [1536, 864]
  color = $[-1,-1,-1]
  expName = PictureNaming
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Routines
  Routine trial
    CodeComponent code
      Code Type = Both
      Begin Experiment:
        ITI = 0
        print(ITI)

        win.mouseVisible = False

        ori = 0
      Begin JS Experiment:
        ITI = 0;
        console.log(ITI);
        win.mouseVisible = false;
      Begin JS Routine:
        import * as random from 'random';
        var ITI;
        ITI = (0.5 + (random.random() * 0.5));
        console.log(ITI);
        image.setOri = ori;
      Begin Routine:
        import random
        ITI = 0.5 + random.random()*0.5
        print(ITI)

        if labjack == 1:
            time.sleep(ITI)
            d.setFIOState(1,1)
            d.setFIOState(1,0)
            d.setFIOState(7,1)
            d.setFIOState(7,0)

        if rotate.keys == 'right':
            ori = 90
        elif rotate.keys == 'left':
            ori = -90
        elif rotate.keys == 'up':
            ori = 0
        elif rotate.keys == 'down':
            ori = 180


        image.ori = ori
    ImageComponent image
      image [set every repeat] = $stimFile
      ori [set every repeat] = $ori
      startVal [time (s)] = $ITI
      units = height
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    KeyboardComponent key_resp_2
      allowedKeys = 'space', 'e', 'c', 'b', 'd'
      forceEndRoutine = True
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    KeyboardComponent rotate
      allowedKeys [set every repeat] = 'left', 'right', 'up', 'down'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      store = nothing
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    PolygonComponent polygon
      fillColor = red
      nVertices = 15
      shape = regular polygon...
      size = (0.1, 0.1)
      startVal [time (s)] = $ITI
      stopVal [duration (s)] = 0.2
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  Routine Instruction
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        In this task, we will show you a variety of pictures. Please identify the object in the picture as fast as you can with a single word. As soon as you think of the word, say it out loud. For example, if we show you a picture of a boat, you say "BOAT." Some images could have more than one answer. Just say the best answer.
    KeyboardComponent key_resp
      allowedKeys = 'space', 'e', 'b', 'c', 'd'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine LabJack_Check
    CodeComponent LJ
      Code Type = Both
      Begin Experiment:
        from psychopy.hardware.labjacks import u3
        import time

        try:
            d = u3.U3()

            for i in range(8):
                d.setFIOState(1,1)
                d.setFIOState(1,0)
                d.setFIOState(7,1)
                d.setFIOState(7,0)
                time.sleep(0.1)

            labjack = 1
            continueRoutine = False
        except:
            labjack = 0
            pass
    TextComponent LabJack_Warning
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        No LabJack has been detected. If this is an error, exit ('esc') and try again. Press any other key to proceed to task.
    KeyboardComponent key_resp_3
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine LabJack_Check
  Routine Instruction
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = images.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('stimFile', 'stims/Bananaclr.jpg')]),
      OrderedDict([('stimFile', 'stims/Bearclr.jpg')]),
      OrderedDict([('stimFile', 'stims/Bedclr.jpg')]),
      OrderedDict([('stimFile', 'stims/Bicycleclr.jpg')]),
      OrderedDict([('stimFile', 'stims/Birdclr.jpg')]),
      OrderedDict([('stimFile', 'stims/Bookclr.jpg')]),
      OrderedDict([('stimFile', 'stims/Cakeclr.jpg')]),
      OrderedDict([('stimFile', 'stims/Carclr.jpg')]),
      OrderedDict([('stimFile', 'stims/Catclr.jpg')]),
      OrderedDict([('stimFile', 'stims/Chairclr.jpg')]),
      OrderedDict([('stimFile', 'stims/Chickenclr.jpg')]),
      OrderedDict([('stimFile', 'stims/Clockclr.jpg')]),
      OrderedDict([('stimFile', 'stims/Cornclr.jpg')]),
      OrderedDict([('stimFile', 'stims/Cowclr.jpg')]),
      OrderedDict([('stimFile', 'stims/Dogclr.jpg')]),
      OrderedDict([('stimFile', 'stims/Duckclr.jpg')]),
      OrderedDict([('stimFile', 'stims/Drumclr.jpg')]),
      OrderedDict([('stimFile', 'stims/Elephantclr.jpg')]),
      OrderedDict([('stimFile', 'stims/Footballclr.jpg')]),
      OrderedDict([('stimFile', 'stims/Frogclr.jpg')]),
      OrderedDict([('stimFile', 'stims/Glassclr.jpg')]),
      OrderedDict([('stimFile', 'stims/Goatclr.jpg')]),
      OrderedDict([('stimFile', 'stims/Gorillaclr.jpg')]),
      OrderedDict([('stimFile', 'stims/Guitarclr.jpg')]),
      OrderedDict([('stimFile', 'stims/Hammerclr.jpg')]),
      OrderedDict([('stimFile', 'stims/Horseclr.jpg')]),
      OrderedDict([('stimFile', 'stims/Houseclr.jpg')]),
      OrderedDict([('stimFile', 'stims/Lemonclr.jpg')]),
      OrderedDict([('stimFile', 'stims/Lightbulbclr.jpg')]),
      OrderedDict([('stimFile', 'stims/Lionclr.jpg')])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
    Routine trial
  LoopTerminator trials
