PsychoPy2experiment version="2020.1.2"
Settings
  Experiment info = {'session': '001', 'participant': ''}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = use prefs
  Window size (pixels) = [1440, 900]
  color = $[-1,-1,-1]
  expName = PictureNaming
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Routines
  Routine trial
    CodeComponent code
      Code Type = Both
      Begin Experiment:
        ITI = 0
        print(ITI)

        win.mouseVisible = False

        d.setFIOState(1,1)
        d.setFIOState(1,0)
        d.setFIOState(7,1)
        d.setFIOState(7,0)
      Begin JS Experiment:
        random = Math.random;
        ITI = 0;

        win=psychoJS.window;
        win.mouseVisible = false;
        document.body.style.cursor='none';
      Begin JS Routine:
        ITI = 0.5 + random()*0.5;
      Begin Routine:
        import random
        ITI = 0.5 + random.random()*0.5
        print(ITI)
    ImageComponent image
      image [set every repeat] = $stimFile
      startVal [time (s)] = $ITI
      units = height
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    KeyboardComponent key_resp_2
      allowedKeys = 'space', 'e', 'c', 'b', 'd'
      forceEndRoutine = True
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  Routine Instruction
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        In this task, we will show you a variety of pictures. Please describe the action that is occuring in the picture as fast as you can without making mistakes. The answers will be a few words. As soon as you think of the action, say it out loud. For example, if we show you a picture of a boy chasing a girl, you would say "boy chasing girl."
    KeyboardComponent key_resp
      allowedKeys = 'space', 'e', 'c', 'b', 'd'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent LabJack
      Code Type = Both
      Begin Experiment:
        from psychopy.hardware.labjacks import u3
        import time

        d = u3.U3()

        for i in range(9):
            d.setFIOState(1,1)
            d.setFIOState(1,0)
            d.setFIOState(7,1)
            d.setFIOState(7,0)
            time.sleep(0.1)
  Routine Testing
    CodeComponent code_3
      Code Type = Both
      Begin Routine:
        ts = 'ending'
      Each Frame:
        ts = 'ending'
      End Routine:
        ts = 'ending'
    TextComponent text_2
      color = red
      letterHeight = 1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = $ts
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Flow
  Routine Instruction
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = images.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('stimFile', 'Images/image1.jpg')]),
      OrderedDict([('stimFile', 'Images/image2.jpg')]),
      OrderedDict([('stimFile', 'Images/image3.jpg')]),
      OrderedDict([('stimFile', 'Images/image4.jpg')]),
      OrderedDict([('stimFile', 'Images/image5.jpg')]),
      OrderedDict([('stimFile', 'Images/image6.jpg')]),
      OrderedDict([('stimFile', 'Images/image7.jpg')]),
      OrderedDict([('stimFile', 'Images/image8.jpg')]),
      OrderedDict([('stimFile', 'Images/image9.jpg')]),
      OrderedDict([('stimFile', 'Images/image10.jpg')]),
      OrderedDict([('stimFile', 'Images/image11.jpg')]),
      OrderedDict([('stimFile', 'Images/image12.jpg')]),
      OrderedDict([('stimFile', 'Images/image13.jpg')]),
      OrderedDict([('stimFile', 'Images/image14.jpg')]),
      OrderedDict([('stimFile', 'Images/image15.jpg')]),
      OrderedDict([('stimFile', 'Images/image16.jpg')]),
      OrderedDict([('stimFile', 'Images/image17.jpg')]),
      OrderedDict([('stimFile', 'Images/image18.jpg')]),
      OrderedDict([('stimFile', 'Images/image19.jpg')]),
      OrderedDict([('stimFile', 'Images/image20.jpg')]),
      OrderedDict([('stimFile', 'Images/image21.jpg')]),
      OrderedDict([('stimFile', 'Images/image22.jpg')]),
      OrderedDict([('stimFile', 'Images/image23.jpg')]),
      OrderedDict([('stimFile', 'Images/image24.jpg')]),
      OrderedDict([('stimFile', 'Images/image25.jpg')]),
      OrderedDict([('stimFile', 'Images/image26.jpg')]),
      OrderedDict([('stimFile', 'Images/image27.jpg')]),
      OrderedDict([('stimFile', 'Images/image28.jpg')])]
    Routine trial
  LoopTerminator trials
