PsychoPy2experiment version="2020.1.2"
Settings
  Experiment info = {'session': '001', 'participant': ''}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = use prefs
  Window size (pixels) = [1440, 900]
  color = $[-1,-1,-1]
  expName = PictureNaming
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Routines
  Routine trial
    CodeComponent code
      Code Type = Both
      Begin Experiment:
        ITI = 0
        print(ITI)

        win.mouseVisible = False

        d.setFIOState(1,1)
        d.setFIOState(1,0)
        d.setFIOState(7,1)
        d.setFIOState(7,0)
      Begin JS Experiment:
        random = Math.random;
        ITI = 0;

        document.body.style.cursor='none';
        win=psychoJS.window;
        win.mouseVisible = false;
      Begin JS Routine:
        ITI = 0.5 + random()*0.5;
      Begin Routine:
        import random
        ITI = 0.5 + random.random()*0.5
        print(ITI)
    KeyboardComponent key_resp_2
      allowedKeys = 'space', 'e', 'c', 'b', 'd'
      forceEndRoutine = True
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    TextComponent text_2
      letterHeight = 0.1
      startVal [time (s)] = $ITI
      text [set every repeat] = $stimFile
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  Routine Instruction
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        In this task, we will show you a variety of pictures. Please identify the object in the picture as fast as you can with a single word. As soon as you think of the word, say it out loud. For example, if we show you a picture of a boat, you say "BOAT." Some images could have more than one answer. Just say the best answer.
    KeyboardComponent key_resp
      allowedKeys = 'space', 'e', 'c', 'b', 'd'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent LabJack
      Code Type = Both
      Begin Experiment:
        from psychopy.hardware.labjacks import u3
        import time

        d = u3.U3()

        for i in range(10):
            d.setFIOState(1,1)
            d.setFIOState(1,0)
            d.setFIOState(7,1)
            d.setFIOState(7,0)
            time.sleep(0.1)
Flow
  Routine Instruction
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = images.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('stimFile', 'AUTO')]),
      OrderedDict([('stimFile', 'BAG')]),
      OrderedDict([('stimFile', 'EARTH')]),
      OrderedDict([('stimFile', 'HIGHWAY')]),
      OrderedDict([('stimFile', 'HOUSE')]),
      OrderedDict([('stimFile', 'HUGE')]),
      OrderedDict([('stimFile', 'INFANT')]),
      OrderedDict([('stimFile', 'INSTRUCT')]),
      OrderedDict([('stimFile', 'JACKET')]),
      OrderedDict([('stimFile', 'JOGGING')]),
      OrderedDict([('stimFile', 'JOURNAL')]),
      OrderedDict([('stimFile', 'KID')]),
      OrderedDict([('stimFile', 'LEAP')]),
      OrderedDict([('stimFile', 'LITTLE')]),
      OrderedDict([('stimFile', 'MAN')]),
      OrderedDict([('stimFile', 'MIX')]),
      OrderedDict([('stimFile', 'PHOTO')]),
      OrderedDict([('stimFile', 'ROCK')]),
      OrderedDict([('stimFile', 'SEA')]),
      OrderedDict([('stimFile', 'SHOUT')]),
      OrderedDict([('stimFile', 'START')]),
      OrderedDict([('stimFile', 'SWEETS')]),
      OrderedDict([('stimFile', 'TRAIL')]),
      OrderedDict([('stimFile', 'TRIP')]),
      OrderedDict([('stimFile', 'TROUSERS')]),
      OrderedDict([('stimFile', 'TRUNK')]),
      OrderedDict([('stimFile', 'WOMAN')])]
    Routine trial
  LoopTerminator trials
