PsychoPy2experiment version="2020.1.2"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  expName = AVSpeech
  exportHTML = on Save
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Routines
  Routine trial
  Routine practicePrompt
    PolygonComponent blackScreen
      fillColor = black
      lineColor = black
      lineWidth = 0
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
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    TextComponent doPracticePrompt
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Do you want to do the practice tasks?

        Select 'y' for YES or 'n' for NO to skip the practice.
    KeyboardComponent doPracticeResp
      allowedKeys = 'y','n'
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      syncScreenRefresh = False
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    CodeComponent code
      Code Type = Both
      End JS Routine:
        if ((doPracticeResp.keys === "y")) {
            doPractice = 1;
        } else {
            doPractice = 0;
        }
      End Routine:
        if (doPracticeResp.keys == 'y'):
            doPractice = 1
        else:
            doPractice = 0
  Routine instructions
    PolygonComponent blackScreen2
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (2,2)
      startVal [time (s)] = 0.0
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        In this activity, you will hear a word being spoken on each trial, followed by 4 response choices.
        Press the button for the first letter/sound of the word you heard (e.g. "g" or "th").
        The '1' key corresponds to the first option shown, the '2' key to the second, '9' to the third, and '0' to the final option.

        Some trials will be harder to hear than others, and some of the words may be fake words. Please try your best to choose whichever letter was most similar to what you heard.
        If you are ever unsure, please give it your best guess.

        This task will take 5 minutes.

        Press any button to continue.
    KeyboardComponent key_resp
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine practiceInstruction
    PolygonComponent polygon
      fillColor = black
      shape = rectangle
      size = (2,2)
      startVal [time (s)] = 0.0
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    TextComponent practInstr
      letterHeight = .05
      startVal [time (s)] = 0.0
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      text:
        First, we will go through 8 practice trials.

        In this activity, you will hear a word on each trial, followed by 4 response choices.
        Press the button for the first letter/sound of the word you heard (e.g. "g" or "th").
        The '1' key corresponds to the first option shown, the '2' key to the second, '9' to the third, and '0' to the final option.

        Some trials will be harder to hear than others, and some of the words may be fake words. If you are ever unsure, please give it your best guess.

        Press any button to continue.
    KeyboardComponent practInstResp
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        from psychopy.hardware.labjacks import u3
        import time

        d = u3.U3()

        for i in range(5):
            d.setFIOState(7,1)
            d.setFIOState(7,0)
            time.sleep(0.1)
  Routine init
    CodeComponent code_JS
      Code Type = Auto->JS
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    CodeComponent initCode
      Code Type = Auto->JS
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      Begin Experiment:
        import random
        random.seed()

        # Number of items
        num_practice = 8
        num_stim = 40
        num_trials = 120
        # Allow fewer than the full number of trials to run
        # Specify the number to run here.
        trials_to_run = 120

        stim = {}
        stim['AudNames'] = ['bag','base','beard','bible','bid','fad','fat','fill','fine','fist','bank','beer','bias','bill','bye','fast','file','fish','fit','five','gag','gas','guild','guile','gig','dad','dash','dill','dine','disk','gang','gear','guise','gill','guy','dance','dial','dish','digs','dive']
        stim['Answers'] = [['B','G','D','TH'],['B','G','D','TH'],['B','G','D','TH'],['B','G','D','TH'],['B','G','D','TH'],['F','D','T','TH'],['F','D','T','TH'],['F','D','T','TH'],['F','D','T','TH'],['F','D','T','TH'],['B','G','D','TH'],['B','G','D','TH'],['B','G','D','TH'],['B','G','D','TH'],['B','G','D','TH'],['F','D','T','TH'],['F','D','T','TH'],['F','D','T','TH'],['F','D','G','TH'],['F','D','T','TH'],['G','B','D','TH'],['G','B','D','TH'],['G','B','D','TH'],['G','B','D','TH'],['G','B','D','TH'],['D','F','T','TH'],['D','F','T','TH'],['D','F','T','TH'],['D','F','T','TH'],['D','F','T','TH'],['G','B','D','TH'],['G','B','D','TH'],['G','B','D','TH'],['G','B','D','TH'],['G','B','D','T'],['D','F','T','TH'],['D','F','T','TH'],['D','F','T','TH'],['D','F','T','TH'],['D','F','T','TH']]
        stim['AudOnsets'] = [0.5397, 0.5204, 0.5329, 0.5310,0.5417,0.5428,0.5478, 0.5244, 0.5294, 0.5384, 0.5306, 0.5331, 0.5316, 0.5228, 0.5087, 0.5257, 0.5201, 0.5492, 0.5201, 0.5355, 0.5407, 0.5458, 0.5314, 0.5275, 0.5457, 0.5456, 0.5177, 0.5355, 0.5337, 0.5319, 0.5211, 0.5260, 0.5196, 0.5337, 0.5308, 0.5395, 0.5391, 0.5029, 0.5185, 0.5300]
        stim['FrameAdj'] = [0, 1, 0, 0, 0, -2, -1, 1, -2, -2, 0, 1, 0, 1, -2, 0, -2, 0, -2, -2, 1, 0, 0, 1, 0, 0, 0, 0, 0, 0, 1, -2, 1, 0, 0, 0, 0, -3, 1, 1]
        # FrameAdj: negative value is the number of times to hold the first frame, positive value is the number of frames to skip

        # From MATLAB:
        # This seems to be randomizing whether the stim lists are in order or are shuffled order.
        # This order determines which condition they're paired with before randomizing, so it matters.
        #DATA.StimCounterBalance = randperm(2);
        #DATA.StimCounterBalance = DATA.StimCounterBalance(1:numBlocks);
        #STIM.Aud_List = [];
        #STIM.IncongV_List = [];
        #for i=1:numBlocks
        #    if DATA.StimCounterBalance(i)==1
        #        STIM.Aud_List(i,:) = STIM.Aud_List_Orig;
        #        STIM.IncongV_List(i,:) = STIM.IncongV_List_Orig;
        #    else
        #        STIM.Aud_List(i,:) = STIM.Aud_List_Orig([11:20 1:10 31:40 21:30 ]);
        #        STIM.IncongV_List(i,:) = STIM.IncongV_List_Orig([11:20 1:10 31:40 21:30 ]);
        #    end
        #end
        balancer = random.randint(1,2)
        # print(balancer)
        incongV_list_orig = [x for x in range(20,40)] + [x for x in range(0,20)]
        if balancer ==1 :
            aud_list_orig = [x for x in range(0, 40)]
        else:
            aud_list_orig = [x for x in range(10,20)] + [x for x in range(0, 10)] +[x for x in range(30,40)] + [x for x in range(20,30)]
            incongV_list_orig = incongV_list_orig[10:20] + incongV_list_orig[0:10] + incongV_list_orig[30:40] + incongV_list_orig[20:30]
        # print(aud_list_orig)
        # print(incongV_list_orig)

        # Get the practice items
        practice = []
        practiceVisList = [-1, 34, 33, -1, 15, 5, -1, -1]
        practiceAudList = [10, 34, 13, 25, 35, 5, 2, 39]
        practiceCondList = [2, 8, 10, 3, 12, 5, 1, 4];
        corrAnsList = ['s','k','l','s','s','d','s','s']
        corrAnsIdx = [0, 2, 3, 0, 0, 1, 0, 0]
        # Get these as an array of dicts so each practice iteration is a single array item.
        # This makes randomizing trials easier (below).
        # Less important for practice, except for consistency in the data format.
        for pIdx in range(0, num_practice):
            p = {'AudList': practiceAudList[pIdx], 'VisList': practiceVisList[pIdx], 'CorrAns': corrAnsList[pIdx], 'CorrAnsIdx': corrAnsIdx[pIdx], 'Condition': practiceCondList[pIdx]}
            practice.append(p)

        pract_idx = 0
        stim_idx = 0

        # Get a list of all the stimulus trial combinations and randomize it.
        trialList = []
        trialsAudList = aud_list_orig + aud_list_orig + aud_list_orig
        trialsVisList = [-1 for x in range(0,40)] + aud_list_orig + incongV_list_orig
        trialsConditionList = [1,1,1,1,1,1,1,1,1,1,2,2,2,2,2,2,2,2,2,2,3,3,3,3,3,3,3,3,3,3,4,4,4,4,4,4,4,4,4,4,5,5,5,5,5,5,5,5,5,5,6,6,6,6,6,6,6,6,6,6,7,7,7,7,7,7,7,7,7,7,8,8,8,8,8,8,8,8,8,8,9,9,9,9,9,9,9,9,9,9,10,10,10,10,10,10,10,10,10,10,11,11,11,11,11,11,11,11,11,11,12,12,12,12,12,12,12,12,12,12]
        for tIdx in range(0, num_trials):
            t = {'AudList': trialsAudList[tIdx], 'VisList': trialsVisList[tIdx], 'Condition': trialsConditionList[tIdx]}
            trialList.append(t)

        random.shuffle(trialList)
        # print(trials)

        print(len(stim))
        print(len(practice))

        # When they miss a trial, increase response time
        # by .25 sec up to max 2 sec.
        non_missed_trials = 0
        rt = 1.25
  Routine practiceResponse
    CodeComponent makePracticeResponses
      Code Type = Both
      Begin JS Routine:
        responseOptions = stim["Answers"][practice[pract_idx]["AudList"]].slice();
        shuffle(responseOptions);

        responseOptionText = responseOptions[0] + "\t\t\t" + responseOptions[1] + "\t\t\t" + responseOptions[2] + "\t\t\t" + responseOptions[3];

        correctAnswerIdx = practice[pract_idx]["CorrAnsIdx"];
        correctAnsText = stim["Answers"][practice[pract_idx]["AudList"]][correctAnswerIdx];

        shuffledCorrIdx = responseOptions.indexOf(correctAnsText);

        if ((shuffledCorrIdx === 0)) {
            correctAnswer = "1";
        } else {
            if ((shuffledCorrIdx === 1)) {
                correctAnswer = "2";
            } else {
                if ((shuffledCorrIdx === 2)) {
                    correctAnswer = "9";
                } else {
                    if ((shuffledCorrIdx === 3)) {
                        correctAnswer = "0";
                    }
                }
            }
        }
      Begin Routine:
        responseOptions = stim['Answers'][(practice[pract_idx]['AudList'])].copy()
        print(responseOptions)
        random.shuffle(responseOptions)
        print(responseOptions)

        responseOptionText = responseOptions[0] + \
            '\t\t\t' + responseOptions[1] + \
            '\t\t\t' + responseOptions[2] + \
            '\t\t\t' + responseOptions[3]

        correctAnswerIdx = practice[pract_idx]['CorrAnsIdx']
        print(correctAnswerIdx)
        correctAnsText = stim['Answers'][(practice[pract_idx]['AudList'])][correctAnswerIdx]
        print(correctAnsText)

        shuffledCorrIdx = responseOptions.index(correctAnsText)
        print(shuffledCorrIdx)

        if shuffledCorrIdx == 0:
            correctAnswer = '1'
        elif shuffledCorrIdx == 1:
            correctAnswer = '2'
        elif shuffledCorrIdx == 2:
            correctAnswer = '9'
        elif shuffledCorrIdx == 3:
            correctAnswer = '0'
        print(correctAnswer)
      End JS Routine:
        responseOptions = ((((((responseOptions[0] + " ") + responseOptions[1]) + " ") + responseOptions[2]) + " ") + responseOptions[3]);
        thisExp.addData("responseOptions", responseOptions);
        thisExp.addData("correctResponse", correctAnswer);
      End Routine:
        responseOptions = responseOptions[0] + " " + responseOptions[1] + " " + responseOptions[2] + " " + responseOptions[3]

        thisExp.addData('responseOptions', responseOptions)
        thisExp.addData('correctResponse', correctAnswer)
    PolygonComponent blackRectP
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (2,2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.25
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    TextComponent PracticeRespOptions
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.25
      text [set every repeat] = $responseOptionText
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    KeyboardComponent PracticeResponse
      allowedKeys = '1','2','9','0'
      correctAns = $correctAnswer
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.25
      store = first key
      storeCorrect = True
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    CodeComponent practRespCode
      Code Type = Auto->JS
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      End Routine:
        if PracticeResponse.keys is None:
            showIncorrectFeedback = 0
            showNoAnswer = 1
        else:
            showNoAnswer = 0
            if PracticeResponse.corr==0:
                showIncorrectFeedback = 1
            else:
                showIncorrectFeedback = 0
  Routine practiceDisplay
    CodeComponent ShowPracticeStimuli
      Code Type = Auto->JS
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      Begin Routine:
        from psychopy import visual, core, event, sound

        print("pract_idx:")
        print(pract_idx)
        audioFileIdx = int(practice[pract_idx]['AudList'])
        print(audioFileIdx)
        audioFile = stim['AudNames'][audioFileIdx]

        # Check if this is a noise condition
        if practice[pract_idx]['Condition'] % 2 == 1:
            noiseFile = 'audio_clipped_ogg/pink_noise.ogg'
        else:
            noiseFile = 'audio_clipped_ogg/no_noise.ogg'

        visualFileIdx = int(practice[pract_idx]['VisList'])
        print(visualFileIdx)
        if visualFileIdx == -1:
            visualFile = 'degraded'
        else:
            visualFile = stim['AudNames'][visualFileIdx]

        # Add extensions
        visualFile = visualFile + '.mp4'
        audioFile = audioFile + '.ogg'
        movieFile = 'visual' + '/' + visualFile
        soundFile = 'audio_clipped_ogg' + '/' +  audioFile
        #practSound = sound.Sound(soundFile)

        #mov = visual.MovieStim3(win, movieFile, size=(320, 240),
        #    flipVert=False, flipHoriz=False, loop=False)
        #globalClock = core.Clock()
        #nextFlip = win.getFutureFlipTime(clock='ptb')

        #stimSound.play(when=nextFlip)  # sync with screen refresh
        #print(audioFile)
        #print(movieFile)

        #while mov.status != visual.FINISHED:
        #    mov.draw()
        #    win.flip()
            # if event.getKeys():
            #     break

        frameN = stim['FrameAdj'][visualFileIdx]
      End Routine:
        thisExp.addData('audioFileIdx', audioFileIdx)
        thisExp.addData('visualFileIdx', visualFileIdx)
    MovieComponent movie_stim_pract
      No audio = True
      backend = moviepy
      forceEndRoutine = True
      movie [set every repeat] = $movieFile
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.1
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    SoundComponent sound_stim_pract
      sound [set every repeat] = $soundFile
      startVal [time (s)] = $stim['AudOnsets'][(practice[pract_idx]['AudList'])]
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    SoundComponent noise_pract
      sound [set every repeat] = $noiseFile
      startVal [time (s)] = $stim['AudOnsets'][(practice[pract_idx]['AudList'])]
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    CodeComponent play_movie_pract
      Code Type = Auto->JS
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      Begin Routine:
        d.setFIOState(7,1)
        d.setFIOState(7,0)
    CodeComponent pract_movie_reset
      Code Type = Auto->JS
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  Routine BlankScreen
    PolygonComponent BlackBlank
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (2,2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
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  Routine stimDisplay
    CodeComponent stimDisplayCode
      Code Type = Both
      Begin JS Routine:
        console.log("stim_idx:");
        console.log(stim_idx);
        audioFileIdx = Number.parseInt(trialList[stim_idx]["AudList"]);
        console.log(audioFileIdx);
        audioFile = stim["AudNames"][audioFileIdx];
        visualFileIdx = Number.parseInt(trialList[stim_idx]["VisList"]);
        console.log(visualFileIdx);
        if ((visualFileIdx === (- 1))) {
            visualFile = "degraded";
        } else {
            visualFile = stim["AudNames"][visualFileIdx];
        }

        if (trialList[stim_idx]['Condition']%2 == 1){
            noiseFile = "audio_clipped_mp3/pink_noise.mp3";
        } else {
            noiseFile = "audio_clipped_mp3/no_noise.mp3";
        }

        visualFile = (visualFile + ".mp4");
        audioFile = (audioFile + ".mp3");
        movieFile = ("visual/" + visualFile);
        soundFile = ("audio_clipped_mp3/" + audioFile);
        frameN = stim["FrameAdj"][visualFileIdx] - 1;

        /*
        stimSound = new sound.Sound(soundFile);
        mov = new visual.MovieStim3(win, movieFile, {"size": [320, 240], "flipVert": false, "flipHoriz": false, "loop": false});
        globalClock = new core.Clock();
        nextFlip = win.getFutureFlipTime({"clock": "ptb"});
        stimSound.play({"when": nextFlip});
        console.log(audioFile);
        console.log(movieFile);
        while ((mov.status !== visual.FINISHED)) {
            mov.draw();
            win.flip();
        }
        */
        psychoJS.experiment.addData("audioFileIdx", audioFileIdx);
        psychoJS.experiment.addData("visualFileIdx", visualFileIdx);
      Begin Routine:
        print("stim_idx:")
        print(stim_idx)

        audioFileIdx = int(trialList[stim_idx]['AudList'])
        print(audioFileIdx)
        audioFile = stim['AudNames'][audioFileIdx]

        visualFileIdx = int(trialList[stim_idx]['VisList'])
        print(visualFileIdx)


        if visualFileIdx == -1:
            visualFile = 'degraded'
        else:
            visualFile = stim['AudNames'][visualFileIdx]

        if trialList[stim_idx]['Condition'] % 2 == 1:
            noiseFile = 'audio_clipped_ogg/pink_noise.ogg'
        else:
            noiseFile = 'audio_clipped_ogg/no_noise.ogg'

        # Add extensions
        visualFile = visualFile + '.mp4'
        audioFile = audioFile + '.ogg'
        movieFile = 'visual/'+ visualFile
        soundFile = 'audio_clipped_ogg/' + audioFile
        stimSound = sound.Sound(soundFile)
        frameN = stim["FrameAdj"][visualFileIdx] - 1;

        #mov = visual.MovieStim3(win, movieFile, size=(320, 240),
        #    flipVert=False, flipHoriz=False, loop=False)
        #globalClock = core.Clock()
        #nextFlip = win.getFutureFlipTime(clock='ptb')

        #stimSound.play(when=nextFlip)  # sync with screen refresh
        #print(audioFile)
        #print(movieFile)

        #while mov.status != visual.FINISHED:
        #    mov.draw()
        #    win.flip()
            # if event.getKeys():
            #     break

        #thisExp.addData('audioFileIdx', audioFileIdx)
        #thisExp.addData('visualFileIdx', visualFileIdx)
      End JS Routine:
        thisExp.addData("audioFileIdx", audioFileIdx);
        thisExp.addData("visualFileIdx", visualFileIdx);
      End Routine:
        thisExp.addData('audioFileIdx', audioFileIdx)
        thisExp.addData('visualFileIdx', visualFileIdx)
    MovieComponent movie_stim
      backend = moviepy
      forceEndRoutine = True
      movie [set every repeat] = $movieFile
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.1
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    SoundComponent sound_stim
      sound [set every repeat] = $soundFile
      startVal [time (s)] = $stim['AudOnsets'][(trialList[stim_idx]['AudList'])]
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    SoundComponent noise_stim
      sound [set every repeat] = $noiseFile
      startVal [time (s)] = $stim['AudOnsets'][(trialList[stim_idx]['AudList'])]
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    CodeComponent stim_disp_play
      Code Type = Both
      Begin JS Routine:
        movie_stim._movie.currentTime = 0
        movie_stim.play();
      Begin Routine:
        d.setFIOState(7,1)
        d.setFIOState(7,0)
    CodeComponent movie_stim_disp_stop
      Code Type = Auto->JS
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  Routine stimResponse
    CodeComponent makeStimResponses
      Code Type = Both
      Begin JS Routine:
        responseOptions = stim["Answers"][trialList[stim_idx]["AudList"]].slice();
        console.log(responseOptions);
        shuffle(responseOptions);
        console.log(responseOptions);

        responseOptionText = responseOptions[0] + "\t\t\t" + responseOptions[1] + "\t\t\t" + responseOptions[2] + "\t\t\t" + responseOptions[3];
      Begin Routine:
        responseOptions = stim['Answers'][(trialList[stim_idx]['AudList'])].copy()
        print(responseOptions)
        random.shuffle(responseOptions)
        print(responseOptions)

        responseOptionText = responseOptions[0] + \
            '\t\t\t' + responseOptions[1] + \
            '\t\t\t' + responseOptions[2] + \
            '\t\t\t' + responseOptions[3]
      End JS Routine:
        responseOptions = ((((((responseOptions[0] + " ") + responseOptions[1]) + " ") + responseOptions[2]) + " ") + responseOptions[3]);
        thisExp.addData("responseOptions", responseOptions);
      End Routine:
        responseOptions = responseOptions[0] + " " + responseOptions[1] + " " + responseOptions[2] + " " + responseOptions[3]

        thisExp.addData('responseOptions', responseOptions)
    PolygonComponent BlackRectStim
      fillColor = black
      shape = rectangle
      size = (2,2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $rt
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    TextComponent StimRespOpts
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $rt
      text [set every repeat] = $responseOptionText
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    KeyboardComponent StimResponseKey
      allowedKeys = '1','2','9','0'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $rt
      store = first key
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  Routine practiceCorrectFeedback
    PolygonComponent blackRectCorr
      fillColor = black
      shape = rectangle
      size = (2,2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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    TextComponent practiceCorr
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Correct!
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  Routine practiceIncorrectFeedback
    PolygonComponent blackRectIncorr
      fillColor = black
      shape = rectangle
      size = (2,2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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    TextComponent text_incorrect
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text [set every repeat]:
        'Incorrect. \n\n The correct answer was: \n' + \
        ($stim['Answers'][($practice[pract_idx]['AudList'])][($practice[pract_idx]['CorrAnsIdx'])])
  Routine practiceNoAnsFeedback
    PolygonComponent rectNoAns
      fillColor = black
      shape = rectangle
      size = (2,2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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    TextComponent practNoAnsText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text = 'No key was pressed. \n\n The correct answer was: \n' + $stim['Answers'][($practice[pract_idx]['AudList'])][$practice[pract_idx]['CorrAnsIdx']]
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  Routine increment_pract_idx
    CodeComponent Inc_pract_idx
      Code Type = Auto->JS
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      End Routine:
        pract_idx = pract_idx+1
  Routine rt_adjust
    CodeComponent rt_adjustment
      Code Type = Auto->JS
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      End Routine:
        print(StimResponseKey.keys)
        print(non_missed_trials)
        print(rt)
        if StimResponseKey.keys is None:
            non_missed_trials = 0
            if rt <= 1.75:
                # Increase to a maximum of 2 seconds
                rt = rt + 0.25
        else:
            non_missed_trials += 1

        if non_missed_trials >= 10 and rt >= 1.5:
            # Decrease to a minimum of 1.25 seconds
            rt = rt - 0.25
        print(rt)
  Routine Inc_stim_idx
    CodeComponent inc_stim_idx
      Code Type = Auto->JS
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      End Routine:
        stim_idx = stim_idx + 1
Flow
  Routine init
  Routine practicePrompt
  Routine practiceInstruction
  LoopInitiator practiceLoop loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = doPractice
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    LoopInitiator practiceTrials loopType="TrialHandler"
      loopType = random
      nReps = num_practice
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      Routine BlankScreen
      Routine practiceDisplay
      Routine practiceResponse
      LoopInitiator practCorrect loopType="TrialHandler"
        isTrials = False
        loopType = sequential
        nReps = PracticeResponse.corr
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        Routine practiceCorrectFeedback
      LoopTerminator practCorrect
      LoopInitiator practIncorrect loopType="TrialHandler"
        isTrials = False
        loopType = sequential
        nReps = showIncorrectFeedback
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        Routine practiceIncorrectFeedback
      LoopTerminator practIncorrect
      LoopInitiator practNoAns loopType="TrialHandler"
        isTrials = False
        loopType = sequential
        nReps = showNoAnswer
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        Routine practiceNoAnsFeedback
      LoopTerminator practNoAns
      Routine increment_pract_idx
    LoopTerminator practiceTrials
  LoopTerminator practiceLoop
  Routine instructions
  LoopInitiator stimTrials loopType="TrialHandler"
    loopType = random
    nReps = trials_to_run
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    Routine stimDisplay
    Routine stimResponse
    Routine rt_adjust
    Routine Inc_stim_idx
    Routine BlankScreen
  LoopTerminator stimTrials
